<PlusConfiguration version="2.3" PlusRevision="Plus-2.8.0.62873a16 - Win64">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: BK14L3 Probe + NDI Polaris tracker (Probe, Reference, Stylus) - fCal Phantom 2.1" Description="NDI Polaris with BK14L3 US 4cm 120 sector" />
    <Device Id="TrackerDevice" Type="PolarisTracker" ToolReferenceFrame="Tracker" SerialPort="4" CheckDSR="true">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/HoloTORSUS_v2.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              HoloTORSUS_v2
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E089400
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              HoloTORSUS_v2
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E089400
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              HoloTORSUS_v2
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E089400
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              HoloTORSUS_v2
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E089400
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              HoloTORSUS_v2
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E089400
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/cross_probe.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              cross_probe
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3D112801
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              cross_probe
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3D112801
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              cross_probe
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3D112801
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              cross_probe
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3D112801
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              cross_probe
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3D112801
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/APPLE07_REVISED.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              Apple07Revised
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E115C00
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              Apple07Revised
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E115C00
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              Apple07Revised
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E115C00
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Moore
            </Manufacturer>
            <NdiIdentity>
              01000003
            </NdiIdentity>
            <PartNumber>
              Apple07Revised
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3E115C00
            </SerialNumber>
          </CustomProperties>
        </DataSource>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="VideoDevice"
      Type="BkProFocusOem"
      OemPort="7915"
      ScannerAddress="10.0.0.3"
      OfflineTestingFilePath="C:/Research/fCal/fCal_OfflineTesting"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0"
      BufferSize="100"
      ContinuousStreamingEnabled="FALSE"
      ColorEnabled="FALSE"
      OfflineTesting="FALSE">
      <DataSources>
        <DataSource
          Type="Video"
          Id="Video"
          PortUsImageOrientation="UF"
          ImageType="BRIGHTNESS"
          BufferSize="150"
          ClipRectangleOrigin="111 169 0"
          ClipRectangleSize="698 727 1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.058279	0.000654601	-0.00865412	-24.3844
        0.000201521	-0.0555091	-0.00741904	-108.651
        -0.00897986	0.00721018	-0.0563314	23.2774
        0	0	0	1"
       Error="0.636181" Date="092524_163750" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-410
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2011.12.06 17:57:00" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        -0.0131812	-0.157445	-0.98744	215.063
        0.995866	-0.0908298	0.00118885	28.1074
        -0.0898761	-0.983342	0.157991	-15.2017
        0	0	0	1"
       Error="0.578862" Date="092524_163142" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        1	0	0	-115.05
        0	-1	0	-1.68
        0	0	-1	-18.41
        0	0	0	1"
       Error="0.2" Date="20240328_1026" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.0590019	0	0	0
        0	0.0559426	0	0
        0	0	0.0574732	0
        0	0	0	1"
       Date="092524_163750" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.1.stl"
      ModelToObjectTransform="
        1	0	0	0
        0	1	0	0
        0	0	1	0
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.05501"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="2.0"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="698 727"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10.0"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="FALSE"
    NumberOfMaximumFiducialPointCandidates="20" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.1" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="-32.53 45.0 25.25 " />
        <Landmark Name="#2" Position="-32.53 5.0 25.25" />
        <Landmark Name="#3" Position="-32.53 -5.0 0.25" />
        <Landmark Name="#4" Position="-32.53 45.0 0.25" />
        <Landmark Name="#5" Position="105.47 -5.0 25.25" />
        <Landmark Name="#6" Position="105.47 45.0 25.25" />
        <Landmark Name="#7" Position="105.47 -5.0 5.25" />
        <Landmark Name="#8" Position="105.47 45.0 0.25" />
        <Landmark Name="#9" Position=" -3.53 45.0 29.25" />
        <Landmark Name="#10" Position=" 41.47 45.0 29.25" />
        <Landmark Name="#11" Position=" 86.47 45.0 29.25" />
        <Landmark Name="#12" Position=" 96.47 30.0 29.25" />
        <Landmark Name="#13" Position=" 86.47 -5.0 29.25" />
        <Landmark Name="#14" Position=" 21.47 -5.0 29.25" />
        <Landmark Name="#15" Position=" -3.53 -5.0 29.25" />
        <Landmark Name="#16" Position="-13.53 10.0 29.25" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MEAN"
    FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPlusProbeCalibrationAlgo ImageCoordinateFrame="Image" ProbeCoordinateFrame="Probe" PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" />
</PlusConfiguration>
